# Depth dose in a block of water for X-ray beam

s:Ge/World/Material  = "Air"
d:Ge/World/HLX       = 1.0 m
d:Ge/World/HLY       = 1.0 m
d:Ge/World/HLZ       = 1.0 m
b:Ge/World/Invisible = "True"

-------------------------------------------------------
### Beam Conditions
-------------------------------------------------------

### FSD ###
d:Ge/BeamPosition/TransZ = 32. cm
d:Ge/BeamPosition/TransX = 1. cm
d:Ge/BeamPosition/RotY = 90 deg


includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params_Full_MC/particle_beam.topas

includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params_Full_MC/target.topas

### Define Spectrum Filter 

#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Filters/test_filters/200kVp_30cmFSD_3mmBe_2mmCu_0.3mmAlFilter.topas

### Full MC Material filter

includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Filters/material_filters/material_filters.topas

### Define beam spot size angular emisson

#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/FieldSizes/10cmField.topas

### Build applicator
#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/FieldSizes/30cmFSD_test_applicator.topas

-------------------------------------------------------
### Phantom
-------------------------------------------------------


#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params/Eye_Blob.topas
#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params/Phantom.topas



-------------------------------------------------------
### Back Scatter Detector - Currently water
-------------------------------------------------------

#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params/BSF_Detector.topas

#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params/Backscatter_scoring.topas
#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params/Energy_scorer.topas

#includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params/PDD.topas



-------------------------------------------------------
### Phase Space Scorer
-------------------------------------------------------

includeFile = /home/ebutson/TOPAS/kV_CalcBSF/Other_Params_Full_MC/phase_space.topas


-------------------------------------------------------
### Visualisation
-------------------------------------------------------

s:Gr/ViewA/Type                             = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 1700
i:Gr/ViewA/WindowSizeY                      = 900
d:Gr/ViewA/Theta                            = 0 deg
d:Gr/ViewA/Phi                              = 0 deg
s:Gr/ViewA/Projection                       = "Perspective"
#d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"
b:Gr/Enable = "False"
#b:Gr/ViewA/CopyOpenGLToPDF = "True"

Ts/UseQt = "False"


-------------------------------------------------------
### Control and physics
-------------------------------------------------------

b:Sc/MyScorer/PreCalculateStoppingPowerRatios = "True"
i:Ts/Seed = 1

i:Ge/DemoCons/CheckForOverlapsResolution = 0 # Known Collision w/Applicator
i:Ge/Target/CheckForOverlapsResolution = 0 # Known Collision w/Filter
b:Ge/QuitIfOverlapDetected = "False"

i:Tf/NumberOfSequentialTimes = 100
i:So/Xray/NumberOfHistoriesInRun   = 50000000

i:Ts/ShowHistoryCountAtInterval = 5000000

i:Ts/NumberOfThreads = 0 # 0 indicates all available threads

b:Ts/PauseBeforeQuit = "False"

sv:Ph/MySource/Modules = 1 "g4em-standard_opt1"
#sv:Ph/MySource/Modules = 1 "g4em-penelope"
b:Ph/ListProcesses = "False"
